begintemplate LawrenceOLM

public init, all, Soma, Dendrites, Axon, soma, dendrite, axon

create soma[8], dendrite[52], axon[5]


proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}


proc topol() { local i
  for i = 1, 2 connect soma[i](0), soma[i-1](1)
  for i = 3, 4 connect soma[i](0), soma[i-2](1)
  connect soma[5](0), soma[2](1)
  connect soma[6](0), soma[4](1)
  connect soma[7](0), soma[6](1)
  for i = 0, 2 connect dendrite[i](0), soma(1)
  for i = 3, 4 connect dendrite[i](0), dendrite[1](1)
  for i = 5, 6 connect dendrite[i](0), dendrite[2](1)
  for i = 7, 9 connect dendrite[i](0), dendrite[3](1)
  connect dendrite[10](0), soma[3](1)
  for i = 11, 12 connect dendrite[i](0), dendrite[9](1)
  for i = 13, 14 connect dendrite[i](0), soma[i-9](1)
  connect dendrite[15](0), soma[5](1)
  for i = 16, 18 connect dendrite[i](0), dendrite[10](1)
  for i = 19, 20 connect dendrite[i](0), dendrite[13](1)
  connect dendrite[21](0), soma[6](1)
  for i = 22, 24 connect dendrite[i](0), dendrite[15](1)
  for i = 25, 26 connect dendrite[i](0), dendrite[18](1)
  for i = 27, 28 connect dendrite[i](0), dendrite[19](1)
  connect dendrite[29](0), dendrite[21](1)
  for i = 30, 31 connect dendrite[i](0), dendrite[25](1)
  for i = 32, 34 connect dendrite[i](0), dendrite[26](1)
  for i = 35, 36 connect dendrite[i](0), dendrite[29](1)
  for i = 37, 38 connect dendrite[i](0), dendrite[31](1)
  for i = 39, 40 connect dendrite[i](0), dendrite[33](1)
  for i = 41, 43 connect dendrite[i](0), dendrite[34](1)
  for i = 44, 45 connect dendrite[i](0), dendrite[39](1)
  for i = 46, 47 connect dendrite[i](0), dendrite[40](1)
  for i = 48, 49 connect dendrite[i](0), dendrite[46](1)
  for i = 50, 51 connect dendrite[i](0), dendrite[47](1)
  connect axon[0](0), dendrite[21](1)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(138.2, 224.9, 0.01, 5.87)
	pt3dadd(138.2, 224.9, -0.01, 5.87)
  }
  dendrite {pt3dclear()
	pt3dadd(138.2, 224.9, -0.01, 5.87)
	pt3dadd(138.2, 225, -0.01, 5.87)
  }
  dendrite[1] {pt3dclear()
	pt3dadd(138.2, 224.9, -0.01, 5.87)
	pt3dadd(133.2, 224.5, 0.63, 4.69)
	pt3dadd(130.1, 224.7, -0.23, 3.86)
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  }
}
proc shape3d_2() {
  dendrite[8] {  }
  dendrite[9] {pt3dclear()
	pt3dadd(33.58, 325.9, -0.37, 2)
	pt3dadd(32.96, 327.1, -0.37, 2)
	pt3dadd(33.16, 329.2, -0.46, 2)
	pt3dadd(34.92, 332, -0.53, 2)
	pt3dadd(35.31, 334.8, -1.49, 2)
	pt3dadd(31.84, 335, -1.49, 2)
	pt3dadd(27.61, 334.1, -1.49, 2)
  }
  soma[4] {pt3dclear()
	pt3dadd(151.6, 215.4, -0.01, 10.73)
	pt3dadd(156.7, 210.8, -0.01, 5.53)
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  }
}
proc shape3d_3() {
  dendrite[28] {	pt3dadd(213.4, 208.2, 3.01, 3.69)
	pt3dadd(215.6, 206.6, 3.01, 3.69)
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  }
}
proc shape3d_4() {
  dendrite[35] {	pt3dadd(238.4, 142.7, -13.38, 1.01)
	pt3dadd(239, 143.5, -13.38, 1.01)
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  }
}
proc shape3d_5() {
  dendrite[39] {	pt3dadd(98.91, 281.3, -2.16, 2)
	pt3dadd(96.52, 282.9, -2.16, 2)
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  }
}
proc shape3d_6() {
  dendrite[46] {	pt3dadd(38.69, 332.7, -10.68, 1.67)
	pt3dadd(35.69, 333.3, -10.83, 1.67)
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  }
}

proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
}


objref all, Soma, Dendrites, Axon
proc subsets() { local i
  objref all, Soma, Dendrites, Axon

  all = new SectionList()
    for i=0, 7 soma[i] all.append()
    for i=0, 51 dendrite[i] all.append()
    for i=0, 4 axon[i] all.append()

  Soma = new SectionList()
    for i=0, 7 soma[i] Soma.append()

  Dendrites = new SectionList()
    for i=0, 51 dendrite[i] Dendrites.append()

  Axon = new SectionList()
    for i=0, 4 axon[i] Axon.append()
}


proc geom() {
  forsec all {  }
}


proc biophys() {

    Vrest = -65
    celsius = 24.0

  forsec all {
	Ra = 300
    cm = 0.9
  }

  forsec Soma {
    //insert passsd
	    //g_passsd = 1.1231e-05
	    //erev_passsd = -66.164
    insert pas
        e_pas = -66.164
        g_pas = 1.1231e-05
	insert Kleaksd
	    gkl_Kleaksd = 3.2258e-06
    
	insert IM
	    gbar_IM = 0.0003
	insert Ikdrf
	    gbar_Ikdrf = 0.0006
	insert Ikdrs
	    gbar_Ikdrs = 0.00023
	insert Ika
	    gbar_Ika = 0.00025
	insert Nasoma
	    gna_Nasoma = 0.0107	
	insert Ih
	    gkhbar_Ih = 0.00005

    ek=-95
	eh=-32
    ena=90
  }

  forsec Dendrites {
    //insert passsd
	    //g_passsd = 1.1231e-05
	    //erev_passsd = -66.164
    insert pas
        e_pas = -66.164
        g_pas = 1.1231e-05
	insert Kleaksd
	    gkl_Kleaksd = 3.2258e-06

	insert Ikdrf
	    gbar_Ikdrf = 0.0006
	insert Ikdrs
	    gbar_Ikdrs = 0.00023
	insert Ika
	    gbar_Ika = 0.00025
	insert Nadend
	    gna_Nadend = 0.0117
    insert cad	
    insert cal
	    gcalbar_cal = 0.0025
	insert cat
	    gbar_cat = 0.00025
	insert kca
	    gkbar_kca = 0.00055

    ek=-95
	ena=90
  }

  forsec Axon {
    //insert passaxon
        //g_passaxon = 6.1771e-05
	    //erev_passaxon = -66.164
    insert pas
        e_pas = -66.164
        g_pas = 6.1771e-05
	insert Kleakaxon
	    gkl_Kleakaxon = 1.7742e-05

	insert Ikdrfaxon
	    gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	    gbar_Ikdrsaxon = 0.00023
	insert Naaxon
	    gna_Naaxon = 0.0117

	ek=-95
	ena=90
  } 

  dendrite[1] {insert IM gbar_IM = 0.0003}
  dendrite[6] {insert IM gbar_IM = 0.0003}
  dendrite[15] {insert IM gbar_IM = 0.0003}
  dendrite[13] {insert IM gbar_IM = 0.0003}
  dendrite[10] {insert IM gbar_IM = 0.0003}
  dendrite[2] {insert IM gbar_IM = 0.0003}
                                
}


func lambda_f() { local i, x1, x2, d1, d2, lam

        if (n3d() < 2) { return 1e5*sqrt(diam/(4*PI*$1*Ra*cm)) }

        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}


proc geom_nseg() {
  soma area(.5) // make sure diam reflects 3d points
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}


endtemplate LawrenceOLM
